PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FacesNamesProffessions_Encoding
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade en i taget.
        Under varje bild så står ett NAMN eller ett YRKE .
        Din uppgift är att memorera varje persons namn eller yrke.

        Därefter kommer du se de ansikten som du nyss såg men istället för att det står ett namn eller ett yrke under varje bild så ser du istället tre bokstäver.
        Din uppgift då är att välja den korrekta första bokstaven i Namnet eller Yrket till personen som visas.

        När du ser ett kors på skärmen så ska du bara titta på det.
        Efter varje bildvisning där du väljer första bokstaven så kommer korset i mitten av skärmen att övergå till en cirkel under en kort stund.
        Tryck så snabbt du kan på en av knapparna när du ser Cirkeln.


        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_2
      flipHoriz = True
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine T
  Routine Scrambled_2
    ImageComponent ScrambledImg2
      image [set every repeat] = $Scrambled2
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Scrambled_options2
      image [set every repeat] = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Scrambled_1
    ImageComponent ScrambledImg
      image [set every repeat] = $Scrambled1
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow1
      image [set every repeat] = Gallery_newold.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Wait_fmri
  Routine Wait_fMRI
    PolygonComponent polygon_2
      fillColor = black
      lineWidth = 0.001
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if (key_resp.keys) == 's':
            core.wait(15)
            continueRoutine = False
  Routine Instructions_recog
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will see images presented one at a time.
        Your task is to tell if it is the first time you see the image (New) or if you have seen the image before (Old)

        Respond to each image using the following buttons:
        1 (index finger) = New
        2 (middle finger) = Old
  Routine ImmediateRecall_trial
    KeyboardComponent key_resp_ImmediateRecall
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_3
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5
  Routine Encoding_trial
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])


        if Name == 0:
            text_4.text = Proffession
        else:
            text_4.text = Name
  Routine Circle_y
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_4
      image = C:\Users\emilo\OneDrive - Lund University\Jobb\Experiments\FacesNamesProffessions\Circle.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine fix_cross_circle
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $jitter[0]
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    ImageComponent Circle
      image [set every repeat] = Circle.png
      size = (0.1, 0.1)
      startVal [time (s)] = circlestart
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_Circle
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = circlestart
      stopVal [duration (s)] = 1
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  Routine Press_info
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Gör dig redo att välja första bokstaven.
                                OCH
        Tryck när du ser cirkeln.
    PolygonComponent polygon_3
      fillColor = black
      lineWidth = 0.001
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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  Routine Namn_Info
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = NAMN
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    PolygonComponent polygon_5
      fillColor = black
      lineWidth = 0.001
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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  Routine Proffession_info
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = YRKE
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    PolygonComponent polygon_4
      fillColor = black
      lineWidth = 0.001
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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  Routine fix_cross
    PolygonComponent polygon_6
      fillColor = black
      lineWidth = 0.001
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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Flow
  Routine Instructions
  Routine Wait_fMRI
  Routine Namn_Info
  LoopInitiator Name_trials loopType="TrialHandler"
    conditionsFile = TrialRows.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'TrialRows_Name': '0:5', 'TrialRows_Proffession': '30:35'},
      {'TrialRows_Name': '5:10', 'TrialRows_Proffession': '35:40'},
      {'TrialRows_Name': '10:15', 'TrialRows_Proffession': '40:45'}]
    LoopInitiator Encoding_Name loopType="TrialHandler"
      Selected rows = $TrialRows_Name
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O31.jpg', 'Name': 'Filip', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'V.', 'Letter3': 'F.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O32.jpg', 'Name': 'John', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'I.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O33.jpg', 'Name': 'Mattias', 'Proffession': 0, 'Letter1': 'T', 'Letter2': 'E.', 'Letter3': 'M.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O34.jpg', 'Name': 'Mats', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'B.', 'Letter3': 'R.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O35.jpg', 'Name': 'Henrik', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'K.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O36.jpg', 'Name': 'Jonas', 'Proffession': 0, 'Letter1': 'S.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O37.jpg', 'Name': 'Ulf', 'Proffession': 0, 'Letter1': 'N.', 'Letter2': 'K.', 'Letter3': 'U.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O38.jpg', 'Name': 'Leif', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'L.', 'Letter3': 'E.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O39.jpg', 'Name': 'Björn', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'R.', 'Letter3': 'B.'}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
      Routine Encoding_trial
      Routine fix_cross
    LoopTerminator Encoding_Name
    LoopInitiator ImmediateRecall_Name loopType="TrialHandler"
      Selected rows = $TrialRows_Name
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O31.jpg', 'Name': 'Filip', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'V.', 'Letter3': 'F.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O32.jpg', 'Name': 'John', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'I.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O33.jpg', 'Name': 'Mattias', 'Proffession': 0, 'Letter1': 'T', 'Letter2': 'E.', 'Letter3': 'M.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O34.jpg', 'Name': 'Mats', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'B.', 'Letter3': 'R.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O35.jpg', 'Name': 'Henrik', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'K.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O36.jpg', 'Name': 'Jonas', 'Proffession': 0, 'Letter1': 'S.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O37.jpg', 'Name': 'Ulf', 'Proffession': 0, 'Letter1': 'N.', 'Letter2': 'K.', 'Letter3': 'U.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O38.jpg', 'Name': 'Leif', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'L.', 'Letter3': 'E.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O39.jpg', 'Name': 'Björn', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'R.', 'Letter3': 'B.'}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
      Routine ImmediateRecall_trial
      Routine fix_cross_circle
    LoopTerminator ImmediateRecall_Name
  LoopTerminator Name_trials
  Routine Proffession_info
  LoopInitiator Proffession_trials loopType="TrialHandler"
    conditionsFile = TrialRows.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'TrialRows_Name': '0:6', 'TrialRows_Proffession': '30:36'},
      {'TrialRows_Name': '6:12', 'TrialRows_Proffession': '36:42'},
      {'TrialRows_Name': '12:18', 'TrialRows_Proffession': '42:48'},
      {'TrialRows_Name': '18:24', 'TrialRows_Proffession': '48:54'},
      {'TrialRows_Name': '24:30', 'TrialRows_Proffession': '54:60'}]
    LoopInitiator Encoding_Proffession loopType="TrialHandler"
      Selected rows = $TrialRows_Proffession
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine Encoding_trial
      Routine fix_cross
    LoopTerminator Encoding_Proffession
    LoopInitiator ImmediateRecall_Proffession loopType="TrialHandler"
      Selected rows = $TrialRows_Proffession
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine ImmediateRecall_trial
      Routine fix_cross_circle
    LoopTerminator ImmediateRecall_Proffession
  LoopTerminator Proffession_trials
  Routine Finished
