PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FacesNamesProffessions_Encoding
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Under varje bild så står ett NAMN eller ett YRKE .
        Din uppgift är att memorera varje persons namn eller yrke.

        Efter det kommer ansikten visas med 3 bokstäver och "NY" under bilden. Din uppgift då är att välja den korrekta första bokstaven i Namnet eller Yrket till ansiktet som visas. Om du aldrig sett ansiktet tidigare så väljer du "NY".

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER
        4 (lillfinger) = NY

        När du ser ett kors på skärmen så ska du bara titta på det.

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent occupation
      startExpValue = 0
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $cross_duration
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    CodeComponent cross_jitter
      Code Type = Auto->JS
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      Begin Routine:
        cross_duration = normal(cross_duration_mean,2.2)

        if cross_duration > 8:
            cross_duration = 8
        if cross_duration < 2:
            cross_duration = 2

        print(f"cross duration: {cross_duration}")
  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Encoding_trial
    ImageComponent image_3
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5


        if Name == 0:
            text_8.text = Proffession
        else:
            text_8.text = Name
  Routine Recall_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        alphabet = 'ABCDEFGHIJKLMNOPRSTUV'

        if Name != 0:
            correct = Name[0]
        elif Proffession != 0:
            correct = Proffession[0]

        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")

        letters = "\t\t\t\t".join(letters_lst)
        correct_answer = letters_lst.index(correct) + 1
      End Routine:
        Recall.addData("correct", correct_answer)

        if occupation == 1:
            Recall_prof.addData("correct", correct_answer)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Nu är första halvan klar och det är dags för yrken. Ligg still så pratar vi med dig strax. 
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation =1
        block = 0
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        block = 0
        n_images = 5
        n_blocks = 6
        jitter = np.arange(2.5, 10, .25)
        cross_duration_mean = 4
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
  Routine Encode_info
    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation == 1:
            name_occupation = "yrkestitel"

        text_9.setText(f"Memorera {name_occupation}")


        print(f"Starting block: {block+1}")

        if block == 0:
            start_row = block
        else:
            start_row = block * n_images


        end = start_row + n_images

        selection = f'{start_row}:{end}'
      End Routine:
        block +=1



        print(f'starting row: {start_row}\ending row: {end}')
  Routine Recall_info
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation:
            name_occupation = "yrkestitel"

        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      wrapWidth = 600
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  Routine trigger
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trigger_key.keys == 's':
            core.wait(6)
            continueRoutine = False
Flow
  Routine Instructions
  Routine init_parameters
  Routine trigger
  LoopInitiator name_blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    Routine Encode_info
    LoopInitiator Encoding loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = Names_condition.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'StimFile': 'Images_Faces/O31.jpg', 'Name': 'Filip', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O32.jpg', 'Name': 'John', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O33.jpg', 'Name': 'Mattias', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O34.jpg', 'Name': 'Mats', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O35.jpg', 'Name': 'Henrik', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O36.jpg', 'Name': 'Jonas', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O37.jpg', 'Name': 'Ulf', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O38.jpg', 'Name': 'Leif', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O39.jpg', 'Name': 'Björn', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O40.jpg', 'Name': 'Axel', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O41.jpg', 'Name': 'Christian', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O42.jpg', 'Name': 'Robert', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O43.jpg', 'Name': 'David', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O44.jpg', 'Name': 'Viktor', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O45.jpg', 'Name': 'Marcus', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O46.jpg', 'Name': 'Emil', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O47.jpg', 'Name': 'Niklas', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O48.jpg', 'Name': 'Bertil', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O49.jpg', 'Name': 'Arne', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O50.jpg', 'Name': 'Patrik', 'Proffession': 0},
        {'StimFile': 'Images_Faces/O51.jpg', 'Name': 'Ingemar', 'Proffession': 0}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
      Routine fix_cross
      Routine Encoding_trial
    LoopTerminator Encoding
    Routine Recall_info
    LoopInitiator Recall loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = Names_condition.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine fix_cross
      Routine Recall_trial
    LoopTerminator Recall
  LoopTerminator name_blocks
  Routine instructions_occupation
  Routine trigger
  LoopInitiator profession_blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    Routine Encode_info
    LoopInitiator Encoding_prof loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = Profession_condition.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'StimFile': 'Images_Faces/SH31.png', 'Name': 0, 'Proffession': 'Fastighetsskötare'},
        {'StimFile': 'Images_Faces/SH32.png', 'Name': 0, 'Proffession': 'Skattehandläggare'},
        {'StimFile': 'Images_Faces/SH33.png', 'Name': 0, 'Proffession': 'Elektriker'},
        {'StimFile': 'Images_Faces/SH34.png', 'Name': 0, 'Proffession': 'Marknadsförare'},
        {'StimFile': 'Images_Faces/SH35.png', 'Name': 0, 'Proffession': 'Kock'},
        {'StimFile': 'Images_Faces/SH36.png', 'Name': 0, 'Proffession': 'VVS-montör'},
        {'StimFile': 'Images_Faces/SH37.png', 'Name': 0, 'Proffession': 'Brevbärare'},
        {'StimFile': 'Images_Faces/SH38.png', 'Name': 0, 'Proffession': 'Maskinoperatör'},
        {'StimFile': 'Images_Faces/SH39.png', 'Name': 0, 'Proffession': 'Rektor'},
        {'StimFile': 'Images_Faces/SH40.png', 'Name': 0, 'Proffession': 'Proffessor'},
        {'StimFile': 'Images_Faces/SH41.png', 'Name': 0, 'Proffession': 'Säkerhetsvakt'},
        {'StimFile': 'Images_Faces/SH42.png', 'Name': 0, 'Proffession': 'Tandläkare'},
        {'StimFile': 'Images_Faces/SH43.png', 'Name': 0, 'Proffession': 'Arbetsledare'},
        {'StimFile': 'Images_Faces/SH44.png', 'Name': 0, 'Proffession': 'Försäkringsrådgivare'},
        {'StimFile': 'Images_Faces/SH45.png', 'Name': 0, 'Proffession': 'Vetrinär'},
        {'StimFile': 'Images_Faces/SH46.png', 'Name': 0, 'Proffession': 'Inköpare'},
        {'StimFile': 'Images_Faces/SH47.png', 'Name': 0, 'Proffession': 'Plåtslagare'},
        {'StimFile': 'Images_Faces/SH48.png', 'Name': 0, 'Proffession': 'Jurist'},
        {'StimFile': 'Images_Faces/SH49.png', 'Name': 0, 'Proffession': 'Hovmästare'}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
      Routine fix_cross
      Routine Encoding_trial
    LoopTerminator Encoding_prof
    Routine Recall_info
    LoopInitiator Recall_prof loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = Profession_condition.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine fix_cross
      Routine Recall_trial
    LoopTerminator Recall_prof
  LoopTerminator profession_blocks
  Routine Finished
