PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = FacesNamesProffessions_Encoding
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.055
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Under varje bild så står ett NAMN eller ett YRKE .
        Din uppgift är att memorera varje persons namn eller yrke.

        Vi kommer att se om du kommer ihåg dessa efter skanningen
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Encoding_trial
    ImageComponent face_image
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    TextComponent name_profession
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if Name == 0:
            name_profession.text = Proffession
        else:
            name_profession.text = Name
  Routine Recall_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        alphabet = 'ABCDEFGHIJKLMNOPRSTUV'

        if Name != 0:
            correct = Name[0]
        elif Proffession != 0:
            correct = Proffession[0]

        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")

        letters = "\t\t\t\t".join(letters_lst)
        correct_answer = letters_lst.index(correct) + 1
      End Routine:
        Recall.addData("correct", correct_answer)

        if occupation == 1:
            Recall_prof.addData("correct", correct_answer)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Nu är första halvan klar och det är dags för yrken. 
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation =1
        block = 0
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        n_images = 5
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
        n_blocks = 8

        blocks_per_condition = n_blocks /2
        total_n_images = 20
        image_duration = 5
        circle_duration = 0.5
        baseline_trial_duration = 5
        ITI_duration = 1

        condition = "Names_condition.xlsx"

        baseline_time_limit = n_images * (image_duration+ITI_duration)

        image_list = randchoice(total_n_images, total_n_images, False)
        occupation = False
  Routine Encode_info
    TextComponent memorera_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Experiment:
        block_count = 0
        name_occupation = "namn"
      Begin Routine:
        if occupation:
            name_occupation = "yrkestitel"
            if first_occupation_block:
                image_list = randchoice(total_n_images, total_n_images, False)
                first_occupation_block = False

        memorera_text.setText(f"Memorera {name_occupation}")

        block_count += 1

        selected_images =  np.random.choice(image_list, size=n_images, replace=False)
        print("Selected rows:", selected_images)

        # Update the list by removing the extracted numbers
        image_list = np.setdiff1d(image_list, selected_images)

        print("Updated list:", image_list)
        print(f"Starting block: {block_count}")
  Routine trigger
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        globalClock = core.Clock()
        first_trigger = True
      Each Frame:
        if trigger_key.keys == 's' and first_trigger:
            expStart = globalClock.getTime()
            first_trigger =False
            core.wait(5)
            continueRoutine = False
      End Experiment:
        expTime = globalClock.getTime() - expStart


        print(f"Duration of experiment: {expTime} seconds")

        thisExp.addData("Exeriment Duration", expTime)
  Routine ITI
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine baseline
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0.0
      stopVal [duration (s)] = $cross_duration
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    CodeComponent baseline_code
      Code Type = Auto->JS
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      Before Experiment:
        timer = core.Clock()
      Begin Routine:
        cross_duration = np.random.uniform(1.5, 2.5)

        circle_start = cross_duration + .01

        second_cross_start = circle_start + circle_duration
        second_cross_duration = baseline_trial_duration - second_cross_start

        print(f"cross duration: {cross_duration}")
        print(f"Trial duration = {second_cross_start+second_cross_duration}")

        if baseline_trials.thisN == 0:
            block_start_time = timer.getTime()
      Each Frame:
        if timer.getTime() - block_start_time >= baseline_time_limit -0.01:
            continueRoutine = False
            baseline_trials.finished = True


        if len(circle_press.keys)>0:
            baseline_trials.addData("Key", circle_press.keys)
    PolygonComponent circle
      lineColor = black
      lineWidth = 15
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = $circle_start
      stopVal [duration (s)] = $circle_duration
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    PolygonComponent polygon_2
      fillColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = $second_cross_start
      stopVal [duration (s)] = $second_cross_duration
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    KeyboardComponent circle_press
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8'
      forceEndRoutine = False
      startVal [time (s)] = $circle_start
      stopVal [duration (s)] = $circle_duration
      store = first key
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  Routine New_Faces_info
    TextComponent new_faces
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if block_count == 0:
            continueRoutine = False



        if block_count == blocks_per_condition:
            occupation = True
            new_faces.setText("Nu är det dags för yrken")
            condition = "Profession_condition.xlsx"
            first_occupation_block = True
        else:
            new_faces.setText(f"Dags för {n_images} nya ansikten")
  Routine baseline_instructions
    TextComponent baseline_intructions
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Tryck när du ser cirkeln
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Flow
  Routine Instructions
  Routine init_parameters
  Routine trigger
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = n_blocks
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    Routine New_Faces_info
    Routine Encode_info
    LoopInitiator Encoding loopType="TrialHandler"
      Selected rows = $selected_images
      conditionsFile = $condition
      loopType = random
      nReps = 1
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      Routine Encoding_trial
      Routine ITI
    LoopTerminator Encoding
    Routine baseline_instructions
    LoopInitiator baseline_trials loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine baseline
      Routine ITI
    LoopTerminator baseline_trials
  LoopTerminator block
  Routine Finished
