PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = FacesNamesProffessions_Encoding
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Under varje bild så står ett NAMN eller ett YRKE .
        Din uppgift är att memorera varje persons namn eller yrke.

        Efter det kommer ansikten visas med 3 bokstäver och "NY" under bilden. Din uppgift då är att välja den korrekta första bokstaven i Namnet eller Yrket till ansiktet som visas. Om du aldrig sett ansiktet tidigare så väljer du "NY".

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER
        4 (lillfinger) = NY

        När du ser ett kors på skärmen så ska du bara titta på det.

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent occupation
      startExpValue = 0
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $cross_duration
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        cross_duration = normal(cross_duration_mean, 2.2)


        if cross_duration > 8:
            cross_duration = 8
        if cross_duration < 2:
            cross_duration = 2

        print(f"Cross duration: {cross_duration}")
  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Då var övningen slut
  Routine Wait_fmri
  Routine Encoding_trial
    ImageComponent image_3
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5


        if Name == 0:
            text_8.text = Proffession
        else:
            text_8.text = Name
  Routine Recall_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5



        alphabet = 'ABCDEFGHIJKLMNOPRSTUVÅÄÖ'

        if Name != 0:
            correct = Name[0]
        elif Proffession != 0:
            correct = Proffession[0]

        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")

        letters = "\t\t\t\t".join(letters_lst)
        correct_answer = letters_lst.index(correct) + 1
      End Routine:
        print(letters)
        print(correct_answer)

        Recall.addData("correct", correct_answer)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Nu är det dags för yrken
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation =1
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        block = 0
        n_images = 3
        jitter = np.arange(2.5, 10, .25)
        cross_duration_mean = 4
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
        n_blocks = 1
  Routine Encode_info
    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation == 1:
            name_occupation = "yrkestitel"

        text_9.setText(f"Memorera {name_occupation}")


        print(f"Starting block: {block+1}")

        if block == 0:
            start_row = block
        else:
            start_row = block * n_images


        end = start_row + n_images

        selection = f'{start_row}:{end}'
      End Routine:
        block +=1



        print(f'starting row: {start_row}\ending row: {end}')
  Routine Recall_info
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation:
            name_occupation = "yrkestitel"

        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      wrapWidth = 600
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Flow
  Routine Instructions
  Routine init_parameters
  Routine Encode_info
  LoopInitiator Encoding loopType="TrialHandler"
    Selected rows = $selection
    conditionsFile = Practice_Encoding_Recall.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/P1.jpg', 'Name': 'Tommy', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'V.', 'Letter3': 'T.', 'NotSeen': None},
      {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/P2.jpg', 'Name': 'Johannes', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'I.', 'Letter3': 'J.', 'NotSeen': None},
      {'Task': 'encoding_name', 'corrAns': 2.0, 'StimFile': 'Images_Faces/P3.jpg', 'Name': 'Edvin', 'Proffession': 0, 'Letter1': 'F.', 'Letter2': 'E.', 'Letter3': 'M.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 1, 'StimFile': 'Images_Faces/P4.jpg', 'Name': 0, 'Proffession': 'Brandman', 'Letter1': 'B.', 'Letter2': 'K.', 'Letter3': 'L.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 3, 'StimFile': 'Images_Faces/P5.jpg', 'Name': 0, 'Proffession': 'Skådespelare', 'Letter1': 'R.', 'Letter2': 'O.', 'Letter3': 'S.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 3.0, 'StimFile': 'Images_Faces/P6.jpg', 'Name': 0, 'Proffession': 'Kemist', 'Letter1': 'P.', 'Letter2': 'L.', 'Letter3': 'K.', 'NotSeen': None},
      {'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/P7.jpg', 'Name': 'Linus', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'B.', 'Letter3': 'R.', 'NotSeen': 'NY'},
      {'Task': 'recall_names', 'corrAns': 2.0, 'StimFile': 'Images_Faces/P8.jpg', 'Name': 'Tobias', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'T.', 'Letter3': 'H.', 'NotSeen': 'NY'}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
    Routine fix_cross
    Routine Encoding_trial
  LoopTerminator Encoding
  Routine Recall_info
  LoopInitiator Recall loopType="TrialHandler"
    Selected rows = $selection
    conditionsFile = Practice_Encoding_Recall.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/P1.jpg', 'Name': 'Tommy', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'V.', 'Letter3': 'T.', 'NotSeen': None},
      {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/P2.jpg', 'Name': 'Johannes', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'I.', 'Letter3': 'J.', 'NotSeen': None},
      {'Task': 'encoding_name', 'corrAns': 2.0, 'StimFile': 'Images_Faces/P3.jpg', 'Name': 'Edvin', 'Proffession': 0, 'Letter1': 'F.', 'Letter2': 'E.', 'Letter3': 'M.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 1, 'StimFile': 'Images_Faces/P4.jpg', 'Name': 0, 'Proffession': 'Brandman', 'Letter1': 'B.', 'Letter2': 'K.', 'Letter3': 'L.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 3, 'StimFile': 'Images_Faces/P5.jpg', 'Name': 0, 'Proffession': 'Skådespelare', 'Letter1': 'R.', 'Letter2': 'O.', 'Letter3': 'S.', 'NotSeen': None},
      {'Task': 'encoding_profession', 'corrAns': 3.0, 'StimFile': 'Images_Faces/P6.jpg', 'Name': 0, 'Proffession': 'Kemist', 'Letter1': 'P.', 'Letter2': 'L.', 'Letter3': 'K.', 'NotSeen': None},
      {'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/P7.jpg', 'Name': 'Linus', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'B.', 'Letter3': 'R.', 'NotSeen': 'NY'},
      {'Task': 'recall_names', 'corrAns': 2.0, 'StimFile': 'Images_Faces/P8.jpg', 'Name': 'Tobias', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'T.', 'Letter3': 'H.', 'NotSeen': 'NY'}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
    Routine fix_cross
    Routine Recall_trial
  LoopTerminator Recall
  Routine instructions_occupation
  Routine Encode_info
  LoopInitiator Encoding_prof loopType="TrialHandler"
    Selected rows = $selection
    conditionsFile = Practice_Encoding_Recall.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine fix_cross
    Routine Encoding_trial
  LoopTerminator Encoding_prof
  Routine Recall_info
  LoopInitiator Recall_prof loopType="TrialHandler"
    Selected rows = $selection
    conditionsFile = Practice_Encoding_Recall.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine fix_cross
    Routine Recall_trial
  LoopTerminator Recall_prof
  Routine Finished
