PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FacesNamesProffessions_Encoding
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Greetings Mr Spotorno!

        Sorry, I mean Dr Spotorno.

        Let's put those fingers to work!
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = 4
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    CodeComponent cross_jitter
      Code Type = Auto->JS
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      Begin Routine:
        cross_duration = normal(cross_duration_mean,2.5)

        if cross_duration > 10:
            cross_duration = 10
        if cross_duration < 2:
            cross_duration = 2

        print(f"cross duration: {cross_duration}")
  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Recall_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        alphabet = 'ABCDEFGHIJKLMNOPRSTUV'

        if Name != 0:
            correct = Name[0]
        elif Proffession != 0:
            correct = Proffession[0]

        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")

        letters = "\t\t\t\t".join(letters_lst)
        correct_answer = letters_lst.index(correct) + 1
      End Routine:
        Recall.addData("correct", correct_answer)

        if occupation == 1:
            Recall_prof.addData("correct", correct_answer)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Nu är första halvan klar och det är dags för yrken. 
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation =1
        block = 0
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        block = 0
        n_images = 30
        n_retrieval_images = 10
        cross_duration_mean = 5
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
  Routine Encode_info
    TextComponent memory_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Memorera 
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  Routine Recall_info
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation:
            name_occupation = "yrkestitel"

        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      wrapWidth = 600
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  Routine trigger
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trigger_key.keys == 's':
            core.wait(6)
            continueRoutine = False
  Routine tapping
    TextComponent tap
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = Tap
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  Routine ISI
    CodeComponent jitter
      Code Type = Auto->JS
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      Begin Routine:
        ISI_duration = normal(cross_duration_mean,2.5)

        if ISI_duration > 8:
            ISI_duration = 8
        if ISI_duration < 2:
            ISI_duration = 2

        print(f"ISI duration: {ISI_duration}")
    TextComponent nothing
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_duration
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Flow
  Routine Instructions
  Routine init_parameters
  Routine trigger
  LoopInitiator Encoding loopType="TrialHandler"
    loopType = random
    nReps = 60
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    Routine tapping
    Routine ISI
    Routine fix_cross
    Routine ISI
  LoopTerminator Encoding
  Routine Finished
