PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = Gallery_fMRI
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Routines
  Routine trial
    KeyboardComponent key_resp_1
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent image
      image [set every repeat] = $listA[0]
      pos = (0, -0.125)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow
      image [set every repeat] = $ArrowImg
      pos = (0, 0.375)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        total_corr=0
        total_all=0
        rt=0

        uncuedImg_list = []
      Begin Routine:
        # Select and record a value for listA
        #thisA=listA.pop()
        uncuedImg_list.append(listA[0])
        thisExp.addData('thisA',listA[0])
        listA.pop(0)


        if key_resp_1.corr:
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_1.rt

        else:
          total_all=total_all+1
          rt=key_resp_1.rt
  Routine Instructions
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        You will see images presented one at a time above an arrow pointing either left, up or right.
        Your task is to memorize the image together with the direction of the arrow.

        Respond to each image and arrow using the following buttons:
        1 (index finger) = Left
        2 (middle finger) = Up
        3 (ring finger) = Right

        The second time you see each image there will not be one arrow but three highlighted in orange indicating that you may choose the direction you recall was previously presented below the current image.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        import csv
        import random
        import pandas as pd

        df = pd.read_csv('C:/Users/emilo/OneDrive - Lund University/Experiment paradigms/GalleryGame_fMRI/OneShotLearning.csv')

        random.shuffle(df['ArrowImg'])
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
  Routine fix_cross
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent image_2
      image [set every repeat] = $uncuedImg_list[0]
      pos = (0, 0.125)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('thisA',uncuedImg_list[0])
        uncuedImg_list.pop(0)

        if key_resp_2.corr:
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_2.rt

        else:
          total_all=total_all+1
          rt=key_resp_2.rt
    ImageComponent direction_options
      image = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Finished
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Well done!

        You have finished the task.
        Remain still and await further
        instructions by the experiment leader.
  Routine Randomization
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        listA=[]
      Begin Routine:
        listA.append(StimFile)
        # Use listA.append(StimFile) if colA is text

        # Note that in this case loading_loop
        # is using rows 0:10 and has nReps = 3
        # to make a list of 30 numbers. If
        # colA and colB have the same length or
        # come from different spreadsheets, use
        # rows should be blank with nReps = 1

        print(listA)
Flow
  Routine Instructions
  LoopInitiator Randomization_loop loopType="TrialHandler"
    conditionsFile = OneShotLearning.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'NumberLetter': None, 'corrAns': 1, 'StimFile': 'armadillo.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'ImgOrientation': 'left', 'Congruency': 'Congruent', 'Direction': 'ArrowLeft.png'},
      {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'bat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'ImgOrientation': 'left', 'Congruency': 'Incongruent - opposite', 'Direction': 'ArrowRight.png'},
      {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'cat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'ImgOrientation': None, 'Congruency': None, 'Direction': 'ArrowUp.png'},
      {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'cheetah.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'ImgOrientation': None, 'Congruency': None, 'Direction': None},
      {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'cow.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'ImgOrientation': None, 'Congruency': None, 'Direction': None},
      {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'crocodile.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'ImgOrientation': 'right', 'Congruency': 'Incongruent - perpendicular', 'Direction': None},
      {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'dromedary.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'ImgOrientation': None, 'Congruency': None, 'Direction': None},
      {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'elephant.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'ImgOrientation': None, 'Congruency': None, 'Direction': None}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
    Routine Randomization
  LoopTerminator Randomization_loop
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = OneShotLearning_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition_rows': '0:4'},
      {'Condition_rows': '4:8'},
      {'Condition_rows': '8:12'},
      {'Condition_rows': '12:16'},
      {'Condition_rows': '16:20'},
      {'Condition_rows': '20:24'},
      {'Condition_rows': '24:28'},
      {'Condition_rows': '28:32'},
      {'Condition_rows': '32:36'},
      {'Condition_rows': '36:40'},
      {'Condition_rows': '40:44'},
      {'Condition_rows': '44:48'}]
    LoopInitiator Cued loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = OneShotLearning.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'NumberLetter': None, 'corrAns': 1, 'StimFile': 'armadillo.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': 10},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'bat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'cat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'cheetah.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'cow.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'crocodile.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'dromedary.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'elephant.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'giraffe.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None}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
      Routine trial
      Routine fix_cross
    LoopTerminator Cued
    LoopInitiator Uncued loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = OneShotLearning.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'NumberLetter': None, 'corrAns': 1, 'StimFile': 'armadillo.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': 10},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'bat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'cat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'cheetah.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'cow.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'crocodile.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 1, 'StimFile': 'dromedary.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 3, 'StimFile': 'elephant.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'False_StimFile': None, 'DurationTrial': None},
        {'NumberLetter': None, 'corrAns': 2, 'StimFile': 'giraffe.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'False_StimFile': None, 'DurationTrial': None}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
      Routine Uncued_trial
      Routine fix_cross
    LoopTerminator Uncued
  LoopTerminator trials_1
  Routine Finished
