PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.0000, 0.0000, 0.0000
  expName = Gallery_fMRI_OneShotLearning
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Routines
  Routine trial
    KeyboardComponent key_resp_1
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent image
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Arrow
      image [set every repeat] = $ArrowImg
      pos = (0, -0.375)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        total_corr=0
        total_all=0
        rt=0

        Congruency = []
        #Outcome = []
      Begin Routine:
        if key_resp_1.corr:
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_1.rt

        else:
          total_all=total_all+1
          rt=key_resp_1.rt

        #if key_resp_1.keys == 1 and ArrowImg == 'ArrowLeft.png':
            #Outcome=1
        #else:
            #Outcome=0

        if Direction == ArrowImg:
            Congruency='Congruent'
        elif Direction == 'ArrowLeft.png' and ArrowImg == 'ArrowRight.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'ArrowRight.png' and ArrowImg == 'ArrowLeft.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'neutral':
            Congruency='Neutral'
        else:
            Congruency='Incongruent_perpendicular'
      End Routine:
        #thisExp.addData('Outcome', Outcome)
        thisExp.addData('Congruency', Congruency)
  Routine fix_cross
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.corr:
          total_corr=total_corr+1
          total_all=total_all+1
          rt=key_resp_2.rt

        else:
          total_all=total_all+1
          rt=key_resp_2.rt

        if Direction == ArrowImg:
            Congruency='Congruent'
        elif Direction == 'ArrowLeft.png' and ArrowImg == 'ArrowRight.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'ArrowRight.png' and ArrowImg == 'ArrowLeft.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'neutral':
            Congruency='Neutral'
        else:
            Congruency='Incongruent_perpendicular'
      End Routine:
        thisExp.addData('Congruency', Congruency)
    ImageComponent direction_options
      image = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Finished
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Randomization
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        listA=[]
      Begin Routine:
        listA.append(StimFile)
        # Use listA.append(StimFile) if colA is text

        # Note that in this case loading_loop
        # is using rows 0:10 and has nReps = 3
        # to make a list of 30 numbers. If
        # colA and colB have the same length or
        # come from different spreadsheets, use
        # rows should be blank with nReps = 1

        print(listA)
  Routine Trial_scrambled
    ImageComponent Scrambled_img
      image [set every repeat] = $Scrambled
      pos = (0, 0.125)
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow1
      image [set every repeat] = $ArrowImg
      pos = (0, -0.375)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine fMRI_trigger
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Instructions1
    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder presenterade en i taget ovanför en pil som pekar antingen åt vänster, uppåt eller höger.
        Din uppgift är att memorera bilden tillsammans med pilens riktning.

        Svara på varje bild och pilens riktning med hjälp av följande knappar:
        1 (pekfinger) = Vänster
        2 (långfinger) = Upp
        3 (ringfinger) = Höger

        Andra gången du ser varje bild kommer det inte att vara en pil utan tre pilar markerade i orange vilket indikerar att du ska välja den riktning på pilen som du minns tidigare presenterades under den aktuella bilden.

        I början och slutet av uppgiften kommer du att se brusiga bilder.
        Titta bara på bilderna utan att trycka på någon knapp.

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_randomizer
      Code Type = Both
      Begin Experiment:
        import csv
        import random

        Arrow_list = []
        Img_list = []
        ImgType_list = []
        Direction_list = []

        with open("OneShotLearning.csv", "r") as csv_file:
            csv_reader = csv.DictReader(csv_file, delimiter=',')
            for lines in csv_reader:
              Arrow_list.append(lines['ArrowImg'])
              Img_list.append(lines['StimFile'])
              ImgType_list.append(lines['ImgType'])
              Direction_list.append(lines['Direction'])

            #ShuffledArrow_list = shuffle(Arrow_list)
            shuffle(Arrow_list)

            with open('OneShotLearning_Shuffled.csv', 'w') as csvfile:
                fieldnames = ['StimFile','ImgType','ArrowImg','Direction']
                writer = csv.DictWriter(csvfile, fieldnames=fieldnames, lineterminator = '\n')
                writerA = csv.writer(csvfile, delimiter=',', lineterminator = '\n')
                writer.writeheader()
                for i in range(48):
                    writerA.writerow([Img_list[i], ImgType_list[i], Arrow_list[i], Direction_list[i]])
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
  Routine Instructions2
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions:

        You will see images presented one at a time above an arrow pointing either left, up or right.
        Your task is to memorize the image together with the direction of the arrow.

        Respond to each image and arrow using the following buttons:
        1 (index finger) = Left
        2 (middle finger) = Up
        3 (ring finger) = Right

        The second time you see each image there will not be one arrow but three highlighted in orange indicating that you may choose the direction you recall was previously presented below the current image.
  Routine Instructions3
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will see noisy images presented one at a time above an arrow pointing either left, up or right.
        Your task is to look at the image and respond to each image and arrow using the following buttons:

        1 (index finger) = Left
        2 (middle finger) = Up
        3 (ring finger) = Right
Flow
  Routine Instructions1
  Routine fMRI_trigger
  Routine Trial_scrambled
  Routine fix_cross
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = OneShotLearning_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition_rows': '0:4'},
      {'Condition_rows': '4:8'},
      {'Condition_rows': '8:12'},
      {'Condition_rows': '12:16'},
      {'Condition_rows': '16:20'},
      {'Condition_rows': '20:24'},
      {'Condition_rows': '24:28'},
      {'Condition_rows': '28:32'},
      {'Condition_rows': '32:36'},
      {'Condition_rows': '36:40'},
      {'Condition_rows': '40:44'},
      {'Condition_rows': '44:48'}]
    LoopInitiator Cued loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = OneShotLearning_Shuffled.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('StimFile', 'Image/armadillo.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/bat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cheetah.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cow.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/crocodile.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/dromedary.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/elephant.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/giraffe.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/hippopotamus.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/horse.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')])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
      Routine trial
      Routine fix_cross
    LoopTerminator Cued
    LoopInitiator Uncued loopType="TrialHandler"
      Selected rows = $Condition_rows
      conditionsFile = OneShotLearning_Shuffled.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('StimFile', 'Image/armadillo.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/bat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cheetah.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/cow.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/crocodile.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/dromedary.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/elephant.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/giraffe.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/hippopotamus.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('Direction', 'ArrowLeft.png')]),
        OrderedDict([('StimFile', 'Image/horse.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('Direction', 'ArrowLeft.png')])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
      Routine Uncued_trial
      Routine fix_cross
    LoopTerminator Uncued
  LoopTerminator trials
  LoopInitiator ScrambledTrials_2 loopType="TrialHandler"
    Selected rows = 13:25
    conditionsFile = OneShotLearning.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corrAns', 1), ('StimFile', 'Images/armadillo.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('ImgOrientation', 'left'), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/armadillo_scrambled.jpg'), ('old', None)]),
      OrderedDict([('corrAns', 3), ('StimFile', 'Images/bat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('ImgOrientation', 'left'), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/bat_scrambled.jpg'), ('old', None)]),
      OrderedDict([('corrAns', 2), ('StimFile', 'Images/cat.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('ImgOrientation', None), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/cat_scrambled.jpg'), ('old', None)]),
      OrderedDict([('corrAns', 1), ('StimFile', 'Images/cheetah.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowLeft.png'), ('ImgOrientation', None), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/cheetah_scrambled.jpg'), ('old', None)]),
      OrderedDict([('corrAns', 3), ('StimFile', 'Images/cow.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowRight.png'), ('ImgOrientation', None), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/cow_scrambled.jpg'), ('old', None)]),
      OrderedDict([('corrAns', 2), ('StimFile', 'Images/crocodile.jpg'), ('ImgType', 'Animal'), ('ArrowImg', 'ArrowUp.png'), ('ImgOrientation', 'right'), ('Direction', 'ArrowLeft.png'), ('Scrambled', 'Images/crocodile_scrambled.jpg'), ('old', None)])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
    Routine Trial_scrambled
    Routine fix_cross
  LoopTerminator ScrambledTrials_2
  Routine Finished
