PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gallery_fMRI
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Routines
  Routine trial
    KeyboardComponent key_resp_1
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent image
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (1, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent New_old
      image [set every repeat] = Gallery_newold.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Instructions
    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder presenterade en i taget.
        Din uppgift är att avgöra om det är första gången du ser bilden (New) eller om du har sett bilden tidigare (Old).

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = New
        2 (långfinger) = Old

        Vid senare tillfälle under uppgiftens gång kommer du att se bilder presenterade en i taget ovanför tre pilar markerade i orange som pekar åt vänster, uppåt och höger.
        Din uppgift är att välja den riktning som du minns tidigare har presenterats under den aktuella bilden.

        Svara på varje bild och pil med hjälp av följande knappar:
        1 (pekfinger) = Vänster
        2 (långfinger) = Upp
        3 (ringfinger) = Höger

        I början och i mitten av uppgiften kommer du att se brusiga bilder.
        Titta bara på bilderna utan att trycka på någon knapp.

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (1, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Directions
      image = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        Congruency = []
      Begin Routine:
        if Direction == ArrowImg:
            Congruency='Congruent'
        elif Direction == 'ArrowLeft.png' and ArrowImg == 'ArrowRight.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'ArrowRight.png' and ArrowImg == 'ArrowLeft.png':
            Congruency='Incongruent_opposite'
        elif Direction == 'neutral':
            Congruency='Neutral'
        else:
            Congruency='Incongruent_perpendicular'
      End Routine:
        thisExp.addData('Congruency', Congruency)
  Routine Finished
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine T
  Routine Scrambled_2
    ImageComponent ScrambledImg2
      image [set every repeat] = $Scrambled2
      pos = (0, 0.125)
      size = (1, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Scrambled_options2
      image [set every repeat] = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Scrambled_1
    ImageComponent ScrambledImg
      image [set every repeat] = $Scrambled1
      pos = (0, 0.125)
      size = (1, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow1
      image [set every repeat] = Gallery_newold.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Wait_fmri
  Routine Wait_fMRI
    PolygonComponent polygon_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_recog
  Routine Instruction_recall
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will see images presented one at a time above three arrows highlighted in orange pointing left, up and right.
        Your task is to choose the direction you recall was previously presented below the current image.

        Respond to each image and arrow using the following buttons:
        1 (index finger) = Left
        2 (middle finger) = Up
        3 (ring finger) = Right
Flow
  Routine Instructions
  Routine Wait_fMRI
  LoopInitiator ScrambledTrials_1 loopType="TrialHandler"
    Selected rows = 2:6
    conditionsFile = Gallery_block_scrambled.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Scrambled1': 'Images/armadillo_scrambled.jpg', 'Scrambled2': 'Images/barn_owl_scrambled.jpg'},
      {'Scrambled1': 'Images/bat_scrambled.jpg', 'Scrambled2': 'Images/hummingbird_scrambled.jpg'},
      {'Scrambled1': 'Images/cat_scrambled.jpg', 'Scrambled2': 'Images/penguin_scrambled.jpg'},
      {'Scrambled1': 'Images/cheetah_scrambled.jpg', 'Scrambled2': 'Images/pheasant_scrambled.jpg'},
      {'Scrambled1': 'Images/cow_scrambled.jpg', 'Scrambled2': 'Images/castle_scrambled.jpg'},
      {'Scrambled1': 'Images/crocodile_scrambled.jpg', 'Scrambled2': 'Images/cathedral_scrambled.jpg'},
      {'Scrambled1': 'Images/dromedary_scrambled.jpg', 'Scrambled2': 'Images/church_scrambled.jpg'},
      {'Scrambled1': 'Images/elephant_scrambled.jpg', 'Scrambled2': 'Images/factory_scrambled.jpg'},
      {'Scrambled1': 'Images/giraffe_scrambled.jpg', 'Scrambled2': 'Images/granary_scrambled.jpg'},
      {'Scrambled1': 'Images/hippopotamus_scrambled.jpg', 'Scrambled2': 'Images/house_scrambled.jpg'},
      {'Scrambled1': 'Images/horse_scrambled.jpg', 'Scrambled2': 'Images/lighthouse_scrambled.jpg'},
      {'Scrambled1': 'Images/kangaroo_scrambled.jpg', 'Scrambled2': 'Images/mill_scrambled.jpg'},
      {'Scrambled1': 'Images/lioness_scrambled.jpg', 'Scrambled2': 'Images/pagoda_scrambled.jpg'},
      {'Scrambled1': 'Images/lynx_scrambled.jpg', 'Scrambled2': 'Images/palace_scrambled.jpg'},
      {'Scrambled1': 'Images/platypus_scrambled.jpg', 'Scrambled2': 'Images/pyramid_scrambled.jpg'},
      {'Scrambled1': 'Images/rhino_scrambled.jpg', 'Scrambled2': 'Images/shanty_scrambled.jpg'}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
    Routine Scrambled_1
    Routine fix_cross
  LoopTerminator ScrambledTrials_1
  LoopInitiator Recognition loopType="TrialHandler"
    Selected rows = 2:13
    conditionsFile = Gallery_block_recog.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'corrAns': 2, 'StimFile': 'Images/armadillo.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/armadillo_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/bat.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/bat_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/cat.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/cat_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/cheetah.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/cheetah_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/cow.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/cow_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/crocodile.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/crocodile_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/dromedary.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/dromedary_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/elephant.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/elephant_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/giraffe.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/giraffe_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/hippopotamus.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/hippopotamus_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/horse.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/horse_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/kangaroo.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/kangaroo_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/lioness.jpg', 'ImgType': 'Animal', 'Scrambled': 'Images/lioness_scrambled.jpg'}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
    Routine trial
    Routine fix_cross
  LoopTerminator Recognition
  LoopInitiator ScrambledTrials_2 loopType="TrialHandler"
    Selected rows = 6:10
    conditionsFile = Gallery_block_scrambled.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Scrambled1': 'Images/armadillo_scrambled.jpg', 'Scrambled2': 'Images/barn_owl_scrambled.jpg'},
      {'Scrambled1': 'Images/bat_scrambled.jpg', 'Scrambled2': 'Images/hummingbird_scrambled.jpg'},
      {'Scrambled1': 'Images/cat_scrambled.jpg', 'Scrambled2': 'Images/penguin_scrambled.jpg'},
      {'Scrambled1': 'Images/cheetah_scrambled.jpg', 'Scrambled2': 'Images/pheasant_scrambled.jpg'},
      {'Scrambled1': 'Images/cow_scrambled.jpg', 'Scrambled2': 'Images/castle_scrambled.jpg'},
      {'Scrambled1': 'Images/crocodile_scrambled.jpg', 'Scrambled2': 'Images/cathedral_scrambled.jpg'},
      {'Scrambled1': 'Images/dromedary_scrambled.jpg', 'Scrambled2': 'Images/church_scrambled.jpg'},
      {'Scrambled1': 'Images/elephant_scrambled.jpg', 'Scrambled2': 'Images/factory_scrambled.jpg'},
      {'Scrambled1': 'Images/giraffe_scrambled.jpg', 'Scrambled2': 'Images/granary_scrambled.jpg'},
      {'Scrambled1': 'Images/hippopotamus_scrambled.jpg', 'Scrambled2': 'Images/house_scrambled.jpg'},
      {'Scrambled1': 'Images/horse_scrambled.jpg', 'Scrambled2': 'Images/lighthouse_scrambled.jpg'},
      {'Scrambled1': 'Images/kangaroo_scrambled.jpg', 'Scrambled2': 'Images/mill_scrambled.jpg'},
      {'Scrambled1': 'Images/lioness_scrambled.jpg', 'Scrambled2': 'Images/pagoda_scrambled.jpg'},
      {'Scrambled1': 'Images/lynx_scrambled.jpg', 'Scrambled2': 'Images/palace_scrambled.jpg'},
      {'Scrambled1': 'Images/platypus_scrambled.jpg', 'Scrambled2': 'Images/pyramid_scrambled.jpg'},
      {'Scrambled1': 'Images/rhino_scrambled.jpg', 'Scrambled2': 'Images/shanty_scrambled.jpg'}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
    Routine Scrambled_2
    Routine fix_cross
  LoopTerminator ScrambledTrials_2
  LoopInitiator Recall loopType="TrialHandler"
    Selected rows = 7:13
    conditionsFile = Gallery_block_recall.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'corrAns': 1, 'StimFile': 'Images/armadillo.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/armadillo_scrambled.jpg'},
      {'corrAns': 3, 'StimFile': 'Images/bat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/bat_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/cat.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/cat_scrambled.jpg'},
      {'corrAns': 1, 'StimFile': 'Images/cheetah.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/cheetah_scrambled.jpg'},
      {'corrAns': 3, 'StimFile': 'Images/cow.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/cow_scrambled.jpg'},
      {'corrAns': 2, 'StimFile': 'Images/crocodile.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowUp.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/crocodile_scrambled.jpg'},
      {'corrAns': 1, 'StimFile': 'Images/dromedary.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowLeft.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/dromedary_scrambled.jpg'},
      {'corrAns': 3, 'StimFile': 'Images/elephant.jpg', 'ImgType': 'Animal', 'ArrowImg': 'ArrowRight.png', 'Direction': 'Insertdirection', 'Scrambled': 'Images/elephant_scrambled.jpg'}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
    Routine Uncued_trial
    Routine fix_cross
  LoopTerminator Recall
  Routine Finished
