PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FaceNameProfession_recall
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Varje ansikte visas med 3 bokstäver och "NY" under bilden. Din uppgift då är att välja den korrekta första bokstaven i Namnet till ansiktet som visas. Om du aldrig sett ansiktet tidigare så väljer du "NY".

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER
        4 (lillfinger) = NY

        När du ser ett kors på skärmen så ska du bara titta på det.

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent occupation
      startExpValue = 0
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $image_duration
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    CodeComponent save_cross_onset
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('fix_cross Start', polygon.tStart)
  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Wait_fmri
  Routine Encoding_trial
    ImageComponent image_3
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5


        if Name == 0:
            text_8.text = Proffession
        else:
            text_8.text = Name
  Routine Recall_trial
    CodeComponent draw_letters
      Code Type = Auto->JS
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      Begin Experiment:
        face_count = 0
      Begin Routine:
        #Clear keyboard presses
        event.clearEvents()

        alphabet = 'ABCDEFGHIJKLMNOPRSTUVÖ'


        if occupation:
            correct = Profession[0]
        else:
            correct = Name[0]


        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")



        correct_answer = letters_lst.index(correct) + 1

        if Name == "NY":
            correct_answer = 4



        # Create the letter and rectangle stimuli
        letter_position = [-0.4, -0.4]


        # Create the rectangle stimulus for the bounding box
        bounding_box_stim = visual.Rect(win,
        width=0.135,
        height=0.13,
        lineWidth=3,
        fillColor = [0, 0, 0, 0],
        lineColor='black')

        letter_stims = [visual.TextStim(win,
        text=letter,
        autoDraw=True,
        color="black",
        height=0.1,
        pos=(letter_position[0] + (0.3 * i), letter_position[1])) for i, letter in enumerate(letters_lst)]



        # Display the stimuli
        for letter_stim in letter_stims:
            letter_stim.draw()
        win.flip()

        selected_letter_index = None
      Each Frame:
        # Get the pressed keys
        pressed_keys = event.getKeys()

        # Check the pressed key and update the selected letter
        if '1' in pressed_keys:
            selected_letter_index = 0  # Set the selected letter index
        elif '2' in pressed_keys:
            selected_letter_index = 1  # Set the selected letter index
        elif '3' in pressed_keys:
            selected_letter_index = 2  # Set the selected letter index
        elif '4' in pressed_keys:
            selected_letter_index = 3  # Set the selected letter index

        # Redraw the stimuli with the bounding box for the selected letter
        for i, letter_stim in enumerate(letter_stims):
            letter_stim.setAutoDraw(True)
            if i == selected_letter_index:
                bounding_box_stim.pos = letter_stim.pos
                bounding_box_stim.setAutoDraw(True)



        win.flip()
      End Routine:
        print("\t".join(letters_lst))
        print(correct_answer)

        if occupation:
            Professions.addData("correct", correct_answer)
        else:
            Names.addData("correct", correct_answer)

        bounding_box_stim.autoDraw= False


        for letter_stim in letter_stims:
            letter_stim.autoDraw = False
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Nu är det dags för yrken
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation = True
        ITI_index = 0
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        block = 0
        n_images = 40
        image_duration = 5
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
        images_per_condition = 40


        images_selection = randchoice(images_per_condition, n_images, False)
  Routine Encode_info
    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation == 1:
            name_occupation = "yrkestitel"

        text_9.setText(f"Memorera {name_occupation}")


        print(f"Starting block: {block+1}")

        if block == 0:
            start_row = block
        else:
            start_row = block * n_images


        end = start_row + n_images

        selection = f'{start_row}:{end}'
      End Routine:
        block +=1



        print(f'starting row: {start_row}\ending row: {end}')
  Routine Recall_info
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        name_occupation = "namn"
        occupation = False
      Begin Routine:
        if occupation:
            name_occupation = "yrkestitel"

        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 600
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  Routine Wait_fMRI
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Each Frame:
        if (key_resp.keys) == 's':
            expStart = timer.getTime()
            core.wait(5)
            continueRoutine = False
      End Experiment:
        expDuration = timer.getTime() - expStart

        print(f"Duration of experiment was {expDuration} seconds")
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet!
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  Routine ITI
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    CodeComponent duration_setter
      Code Type = Auto->JS
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      Begin Experiment:
        ITI_durations = [7.5, 5, 5, 7.5, 2.5, 5, 2.5, 5, 5, 5, 2.5, 7.5, 2.5, 2.5, 5, 5, 5, 7.5, 7.5, 5, 2.5, 5, 10, 7.5, 2.5, 2.5, 2.5, 7.5, 2.5, 2.5, 7.5, 5, 7.5, 2.5, 5, 7.5, 2.5, 5, 10, 5, 5, 7.5, 2.5, 2.5, 5, 10, 2.5, 2.5, 2.5, 10, 2.5, 5, 2.5, 2.5, 2.5, 5, 10, 2.5, 10, 5, 2.5, 2.5, 2.5, 2.5, 7.5, 5, 2.5, 2.5, 7.5, 5, 10, 10, 2.5, 5, 7.5, 7.5, 5, 5, 2.5, 5]
        print(f"Sum ITI: {sum(ITI_durations)}")
        print(f"Length ITI: {len(ITI_durations)}")
      Begin Routine:
        ITI_duration = np.random.choice(ITI_durations)

        ITI_index = np.where(ITI_durations==ITI_duration)[0][0]

        # Update the list by removing the extracted numbers
        ITI_durations = np.delete(ITI_durations, ITI_index)


        print(ITI_duration)
Flow
  Routine Instructions
  Routine init_parameters
  Routine Wait_fMRI
  Routine Recall_info
  LoopInitiator Names loopType="TrialHandler"
    Selected rows = $images_selection
    conditionsFile = Recall_names.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'recall_names', 'StimFile': 'Images_Faces/O1.jpg', 'Name': 'Karl', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O2.jpg', 'Name': 'Erik', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O3.jpg', 'Name': 'Lars', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O4.jpg', 'Name': 'Anders', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O5.jpg', 'Name': 'Per', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O6.jpg', 'Name': 'Mikael', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O7.jpg', 'Name': 'Johan', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O8.jpg', 'Name': 'Olof', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O9.jpg', 'Name': 'Nils', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O10.jpg', 'Name': 'Jan', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O11.jpg', 'Name': 'Gustav', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O12.jpg', 'Name': 'Hans', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O13.jpg', 'Name': 'Peter', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O14.jpg', 'Name': 'Arvid', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O15.jpg', 'Name': 'Fredrik', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O16.jpg', 'Name': 'Gunnar', 'Profession': 0}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
    Routine Recall_trial
    Routine ITI
    Routine fix_cross
    Routine ITI
  LoopTerminator Names
  Routine Finished
