PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FaceNameProffession_recall
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Varje ansikte visas med 3 bokstäver och "NY" under bilden. Din uppgift då är att välja den korrekta första bokstaven i Namnet eller Yrket till ansiktet som visas. Om du aldrig sett ansiktet tidigare så väljer du "NY".

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER
        4 (lillfinger) = NY

        När du ser ett kors på skärmen så ska du bara titta på det.

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Recall_trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        alphabet = 'ABCDEFGHIJKLMNOPRSTUV'

        if Name != 0:
            correct = Name[0]
        elif Proffession != 0:
            correct = Proffession[0]

        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")

        letters = "\t\t\t\t".join(letters_lst)
        correct_answer = letters_lst.index(correct) + 1
      End Routine:
        Recall.addData("correct", correct_answer)

        if occupation == 1:
            Recall_prof.addData("correct", correct_answer)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Nu är första halvan klar och det är dags för yrken. 
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation =1
        block = 0
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        n_images = 5
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
        n_blocks = 16

        blocks_per_condition = n_blocks /2
        total_n_images = 40
        image_duration = 5
        circle_duration = 0.5
        baseline_trial_duration = 5
        ITI_duration = 1

        condition = "Retrieval_names.xlsx"

        baseline_time_limit = n_images * (image_duration+ITI_duration)

        image_list = randchoice(total_n_images, total_n_images, False)
        occupation = False
  Routine trigger
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        globalClock = core.Clock()
        first_trigger = True
      Each Frame:
        if trigger_key.keys == 's' and first_trigger:
            expStart = globalClock.getTime()
            first_trigger =False
            core.wait(5)
            continueRoutine = False
      End Experiment:
        expTime = globalClock.getTime() - expStart


        print(f"Duration of experiment: {expTime} seconds")

        thisExp.addData("Exeriment Duration", expTime)
  Routine ITI
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine baseline
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0.0
      stopVal [duration (s)] = $cross_duration
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    CodeComponent baseline_code
      Code Type = Auto->JS
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      Before Experiment:
        timer = core.Clock()
      Begin Routine:
        cross_duration = np.random.uniform(1.5, 2.5)

        circle_start = cross_duration + .01

        second_cross_start = circle_start + circle_duration
        second_cross_duration = baseline_trial_duration - second_cross_start

        print(f"cross duration: {cross_duration}")
        print(f"Trial duration = {second_cross_start+second_cross_duration}")

        if baseline_trials.thisN == 0:
            block_start_time = timer.getTime()
      Each Frame:
        if timer.getTime() - block_start_time >= baseline_time_limit -0.01:
            continueRoutine = False
            baseline_trials.finished = True


        if len(circle_press.keys)>0:
            baseline_trials.addData("Key", circle_press.keys)
    PolygonComponent circle
      lineColor = black
      lineWidth = 15
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = $circle_start
      stopVal [duration (s)] = $circle_duration
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    PolygonComponent polygon_2
      fillColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = $second_cross_start
      stopVal [duration (s)] = $second_cross_duration
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    KeyboardComponent circle_press
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8'
      forceEndRoutine = False
      startVal [time (s)] = $circle_start
      stopVal [duration (s)] = $circle_duration
      store = first key
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  Routine New_Faces_info
    TextComponent new_faces
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $new_faces_duration
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        new_faces_duration = 2
      Begin Routine:
        if block_count == 0:
            continueRoutine = False



        if block_count == blocks_per_condition:
            occupation = True
            new_faces.setText("Nu är det dags för yrken")
            condition = "Retrieval_professions.xlsx"
            first_occupation_block = True
            new_faces_duration = 7
        else:
            new_faces.setText(f"{n_images} nya ansikten")
            new_faces_duration = 2
  Routine baseline_instructions
    TextComponent baseline_intructions
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Tryck när du ser triangeln
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  Routine Retrieval_info
    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Experiment:
        block_count = 0
        name_occupation = "namn"
        occupation = False
      Begin Routine:
        if occupation:
            name_occupation = "yrkestitel"
            if first_occupation_block:
                image_list = randchoice(total_n_images, total_n_images, False)
                first_occupation_block = False


        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
        block_count += 1

        selected_images =  np.random.choice(image_list, size=n_images, replace=False)
        print("Selected rows:", selected_images)

        # Update the list by removing the extracted numbers
        image_list = np.setdiff1d(image_list, selected_images)

        print("Updated list:", image_list)
        print(f"Starting block: {block_count}")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = 600
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Retrieval_trial
    ImageComponent face_image
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    KeyboardComponent face_resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent draw_letters
      Code Type = Auto->JS
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      Begin Experiment:
        face_count = 0
      Begin Routine:
        #Clear keyboard presses
        event.clearEvents()

        alphabet = 'ABCDEFGHIJKLMNOPRSTUVÖ'


        if occupation:
            correct = Profession[0]
            conditin_file = "Recall_professions.xlsx"
        else:
            correct = Name[0]


        letter_alternatives = alphabet.replace(correct, '')

        correct = f'{correct}.'


        letter1 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'
        letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'

        while letter1 == letter2:
            print("Same letter randomised, performing randmoisation again..")
            letter2 = f'{letter_alternatives[randint(0, len(letter_alternatives)-1)]}.'


        letters_lst = [correct, letter1, letter2]
        shuffle(letters_lst)

        letters_lst.append("NY")



        correct_answer = letters_lst.index(correct) + 1

        if Name == "NY" or Profession == "NY":
            correct_answer = 4



        # Create the letter and rectangle stimuli
        letter_position = [-0.45, -0.4]


        # Create the rectangle stimulus for the bounding box
        bounding_box_stim = visual.Rect(win,
        width=0.135,
        height=0.13,
        lineWidth=3,
        fillColor = [0, 0, 0, 0],
        lineColor='black')

        letter_stims = [visual.TextStim(win,
        text=letter,
        autoDraw=True,
        color="black",
        height=0.1,
        alignText = 'center',
        pos=(letter_position[0] + (0.3 * i), letter_position[1])) for i, letter in enumerate(letters_lst)]



        # Display the stimuli
        for letter_stim in letter_stims:
            letter_stim.draw()
        win.flip()

        selected_letter_index = None
      Each Frame:
        # Get the pressed keys
        pressed_keys = event.getKeys()

        # Check the pressed key and update the selected letter
        if '1' in pressed_keys:
            selected_letter_index = 0  # Set the selected letter index
        elif '2' in pressed_keys:
            selected_letter_index = 1  # Set the selected letter index
        elif '3' in pressed_keys:
            selected_letter_index = 2  # Set the selected letter index
        elif '4' in pressed_keys:
            selected_letter_index = 3  # Set the selected letter index

        # Redraw the stimuli with the bounding box for the selected letter
        for i, letter_stim in enumerate(letter_stims):
            letter_stim.setAutoDraw(True)
            if i == selected_letter_index:
                bounding_box_stim.pos = letter_stim.pos
                bounding_box_stim.setAutoDraw(True)



        win.flip()
      End Routine:
        print("\t".join(letters_lst))
        print(correct_answer)

        ret_trial.addData("correct", correct_answer)

        bounding_box_stim.autoDraw= False


        for letter_stim in letter_stims:
            letter_stim.autoDraw = False
Flow
  Routine Instructions
  Routine init_parameters
  Routine trigger
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = n_blocks
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    Routine New_Faces_info
    Routine Retrieval_info
    LoopInitiator ret_trial loopType="TrialHandler"
      Selected rows = $selected_images
      conditionsFile = $condition
      loopType = random
      nReps = 1
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      Routine Retrieval_trial
      Routine ITI
    LoopTerminator ret_trial
    Routine baseline_instructions
    LoopInitiator baseline_trials loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine baseline
      Routine ITI
    LoopTerminator baseline_trials
  LoopTerminator block
  Routine Finished
