PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FaceNameProfession_recall
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder på ansikten presenterade ett i taget.
        Varje ansikte visas med 3 bokstäver och "NY" under bilden. Din uppgift då är att välja den korrekta första bokstaven i Namnet eller Yrket till ansiktet som visas. Om du aldrig sett ansiktet tidigare så väljer du "NY".

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = VÄNSTER
        2 (långfinger) = MITTEN
        3 (ringfinger) = HÖGER
        4 (lillfinger) = NY

        När du ser ett kors på skärmen så ska du bara titta på det.

        Vi vet att det är en svår uppgift så gör så gott du kan och lycka till!

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    VariableComponent occupation
      startExpValue = 0
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $image_duration
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    CodeComponent save_cross_onset
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('fix_cross Start', polygon.tStart)
  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine Wait_fmri
  Routine Encoding_trial
    ImageComponent image_3
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
        circlestart = (jitter[0]/2)-0.5


        if Name == 0:
            text_8.text = Proffession
        else:
            text_8.text = Name
  Routine Recall_trial
    CodeComponent code_2
      Code Type = JS
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      Begin JS Experiment:
        face_count = 0;
      Begin JS Routine:
        alphabet = "ABCDEFGHIJKLMNOPRSTUV\u00d6";
        if (occupation) {
            correct = Profession[0];
            conditin_file = "Recall_professions.xlsx";
        } else {
            correct = Name[0];
        }
        letter_alternatives = alphabet.replace(correct, "");
        correct = `${correct}.`;
        letter1 = `${letter_alternatives[randint(0, (letter_alternatives.length - 1))]}.`;
        letter2 = `${letter_alternatives[randint(0, (letter_alternatives.length - 1))]}.`;
        while ((letter1 === letter2)) {
            console.log("Same letter randomised, performing randmoisation again..");
            letter2 = `${letter_alternatives[randint(0, (letter_alternatives.length - 1))]}.`;
        }
        letters_lst = [correct, letter1, letter2];
        util.shuffle(letters_lst);
        letters_lst.push("NY");
        letters = "\t\t\t\t".join(letters_lst);
        correct_answer = (util.index(letters_lst, correct) + 1);
        if (((Name === "NY") || (Profession === "NY"))) {
            correct_answer = 4;
        }
      End JS Routine:
        console.log(letters);
        console.log(correct_answer);
        if (occupation) {
            Professions.addData("correct", correct_answer);
        } else {
            Names.addData("correct", correct_answer);
        }
        thisExp.addData('stimName.tStart', image.tStart)
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      store = all keys
      storeCorrect = True
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      interpolate = nearest
      pos = $image_position
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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    TextComponent letters_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      text [set every repeat] = $letters
      wrapWidth = 1000
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  Routine code
  Routine instructions_occupation
    TextComponent instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Nu är det dags för yrken
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        occupation = True
        ITI_index = 0
  Routine init_parameters
    CodeComponent param_init
      Code Type = Auto->JS
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      Begin Experiment:
        block = 0
        n_images = 40
        image_duration = 5
        image_size = (0.748, 0.755)
        image_position = (0, 0.05)
        images_per_condition = 40


        images_selection = randchoice(images_per_condition, n_images, False)
  Routine Encode_info
    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent block_update
      Code Type = Auto->JS
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      Begin Routine:
        name_occupation = "namn"
        if occupation == 1:
            name_occupation = "yrkestitel"

        text_9.setText(f"Memorera {name_occupation}")


        print(f"Starting block: {block+1}")

        if block == 0:
            start_row = block
        else:
            start_row = block * n_images


        end = start_row + n_images

        selection = f'{start_row}:{end}'
      End Routine:
        block +=1



        print(f'starting row: {start_row}\ending row: {end}')
  Routine Recall_info
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        name_occupation = "namn"
        occupation = False
      Begin Routine:
        if occupation:
            name_occupation = "yrkestitel"

        text_6.setText(f"Välj första bokstaven i personens {name_occupation}")

        fingers.setText("1 - Pekfinger, 2 - Långfinger, 3 - Ringfinger, 4 - Lillfinger")
    TextComponent fingers
      color = black
      letterHeight = 0.045
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 600
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  Routine Wait_fMRI
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Each Frame:
        if (key_resp.keys) == 's':
            expStart = timer.getTime()
            core.wait(5)
            continueRoutine = False
      End Experiment:
        stopTime = timer.getTime() - expStart


        print(f"The Experimetn lasted for {stopTime} seconds")
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Snart börjar experimentet!
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  Routine ITI
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    CodeComponent duration_setter
      Code Type = Auto->JS
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      Begin Experiment:
        #values = [2.5, 5, 7.5, 10]
        #target_sum = 400
        #num_values = 80

        # Create an initial list with random values
        #initial_list = np.random.choice(values, num_values)

        # Calculate the sum of the initial list
        #current_sum = sum(initial_list)

        # Calculate the difference between the target sum and current sum
        #diff = target_sum - current_sum

        # Randomly adjust values in the list until the sum matches the target sum
        #while diff != 0:
            # Choose a random index in the list
        #    index = np.random.randint(0, num_values - 1)
            # Choose a random value from the options
        #    new_value = np.random.choice(values)

            # Update the list at the chosen index with the new value
        #    initial_list[index] = new_value

            # Update the current sum and difference
        #    current_sum = sum(initial_list)
        #    diff = target_sum - current_sum

        ITI_durations = values = [7.5, 5, 5, 7.5, 2.5, 5, 2.5, 5, 5, 5, 2.5, 7.5, 2.5, 2.5, 5, 5, 5, 7.5, 7.5, 5, 2.5, 5, 10, 7.5, 2.5, 2.5, 2.5, 7.5, 2.5, 2.5, 7.5, 5, 7.5, 2.5, 5, 7.5, 2.5, 5, 10, 5, 5, 7.5, 2.5, 2.5, 5, 10, 2.5, 2.5, 2.5, 10, 2.5, 5, 2.5, 2.5, 2.5, 5, 10, 2.5, 10, 5, 2.5, 2.5, 2.5, 2.5, 7.5, 5, 2.5, 2.5, 7.5, 5, 10, 10, 2.5, 5, 7.5, 7.5, 5, 5, 2.5, 5]
      Begin Routine:
        ITI_duration = np.random.choice(ITI_durations)

        ITI_index = np.where(ITI_durations==ITI_duration)[0][0]

        # Update the list by removing the extracted numbers
        ITI_durations = np.delete(ITI_durations, ITI_index)


        print(ITI_duration)

        print(f"Updated ITI duration list length: {len(ITI_durations)}")
Flow
  Routine Instructions
  Routine init_parameters
  Routine Wait_fMRI
  Routine Recall_info
  LoopInitiator Names loopType="TrialHandler"
    Selected rows = $images_selection
    conditionsFile = Retrieval_names.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'recall_names', 'StimFile': 'Images_Faces/O1.jpg', 'Name': 'Karl', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O2.jpg', 'Name': 'Erik', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O3.jpg', 'Name': 'Lars', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O4.jpg', 'Name': 'Anders', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O5.jpg', 'Name': 'Per', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O6.jpg', 'Name': 'Mikael', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O7.jpg', 'Name': 'Johan', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O8.jpg', 'Name': 'Olof', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O9.jpg', 'Name': 'Nils', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O10.jpg', 'Name': 'Jan', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O11.jpg', 'Name': 'Gustav', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O12.jpg', 'Name': 'Hans', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O13.jpg', 'Name': 'Peter', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O14.jpg', 'Name': 'Arvid', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O15.jpg', 'Name': 'Fredrik', 'Profession': 0},
      {'task': 'recall_names', 'StimFile': 'Images_Faces/O16.jpg', 'Name': 'Gunnar', 'Profession': 0}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
    Routine Recall_trial
    Routine ITI
    Routine fix_cross
    Routine ITI
  LoopTerminator Names
  Routine instructions_occupation
  Routine Recall_info
  LoopInitiator Professions loopType="TrialHandler"
    Selected rows = $images_selection
    conditionsFile = Retrieval_professions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH1.png', 'Profession': 'Kassabiträde', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH2.png', 'Profession': 'Lärare', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH3.png', 'Profession': 'Journalist', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH4.png', 'Profession': 'Fritidspedagog', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH5.png', 'Profession': 'Konstnär', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH6.png', 'Profession': 'Parkeringsvakt', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH7.png', 'Profession': 'Bonde', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH8.png', 'Profession': 'Målare', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH9.png', 'Profession': 'Företagssäljare', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH10.png', 'Profession': 'Pilot', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH11.png', 'Profession': 'Psykolog', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH12.png', 'Profession': 'Ingenjör', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH13.png', 'Profession': 'Lagerarbetare', 'Namn': 0},
      {'task': 'recall_proffessions', 'StimFile': 'Images_Faces/SH14.png', 'Profession': 'Snickare', 'Namn': 0}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
    Routine Recall_trial
    Routine ITI
    Routine fix_cross
    Routine ITI
  LoopTerminator Professions
  Routine Finished
